PsychoPy2experiment version="2025.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'phase': 'maintask', 'group': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['instructions/probe_instructions.png', 'instructions/probe_screen_instructions.png', 'instructions/operation_instructions.png', 'instructions/oper_screen_instructions.png', 'instructions/encode_instructions.png', 'stimuli/csvs/maintask_stimlists/prac_stim_list.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_9.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_8.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_7.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_6.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_5.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_4.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_3.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_2.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_1.csv', 'stimuli/csvs/maintask_stimlists/main_stim_list_0.csv', 'stimuli/images/faces/zoe_saldana.png', 'stimuli/images/faces/willie_nelson.png', 'stimuli/images/faces/wendy_davis.png', 'stimuli/images/faces/vin_diesel.png', 'stimuli/images/faces/venus_williams.png', 'stimuli/images/faces/usher.png', 'stimuli/images/faces/tom_hiddleston.png', 'stimuli/images/faces/tom_brady.png', 'stimuli/images/faces/tim_tebow.png', 'stimuli/images/faces/ted_cruz.png', 'stimuli/images/faces/taylor_swift.png', 'stimuli/images/faces/shaun_white.png', 'stimuli/images/faces/seth_rogan.png', 'stimuli/images/faces/serena_williams.png', 'stimuli/images/faces/selena_gomez.png', 'stimuli/images/faces/scarlett_johansson.png', 'stimuli/images/faces/sarah_palin.png', 'stimuli/images/faces/sandra_bullock.png', 'stimuli/images/faces/ryan_reynolds.png', 'stimuli/images/faces/ronda_rousey.png', 'stimuli/images/faces/rihanna.png', 'stimuli/images/faces/rand_paul.png', 'stimuli/images/faces/queen_elizabeth_with_crown.png', 'stimuli/images/faces/peyton_manning.png', 'stimuli/images/faces/penelope_cruz.png', 'stimuli/images/faces/paul_ryan.png', 'stimuli/images/faces/olivia_wilde.png', 'stimuli/images/faces/nicki_minaj.png', 'stimuli/images/faces/morgan_freeman.png', 'stimuli/images/faces/miranda_lambert.png', 'stimuli/images/faces/mila_kunis.png', 'stimuli/images/faces/michelle_obama.png', 'stimuli/images/faces/michele_bachmann.png', 'stimuli/images/faces/michael_phelps.png', 'stimuli/images/faces/michael_jordan.png', 'stimuli/images/faces/mia_hamm.png', 'stimuli/images/faces/martin_omalley.png', 'stimuli/images/faces/maria_sharapova.png', 'stimuli/images/faces/marco_rubio.png', 'stimuli/images/faces/madonna.png', 'stimuli/images/faces/macklemore.png', 'stimuli/images/faces/lucy_liu.png', 'stimuli/images/faces/lindsey_vonn.png', 'stimuli/images/faces/leonardo_dicaprio.png', 'stimuli/images/faces/lebron.png', 'stimuli/images/faces/lance_armstrong.png', 'stimuli/images/faces/kobe_bryant.png', 'stimuli/images/faces/keith_urban.png', 'stimuli/images/faces/katy_perry.png', 'stimuli/images/faces/justin_bieber.png', 'stimuli/images/faces/john_mcain.png', 'stimuli/images/faces/john_mayer.png', 'stimuli/images/faces/john_kerry.png', 'stimuli/images/faces/joe_biden.png', 'stimuli/images/faces/jj_watt.png', 'stimuli/images/faces/jennifer_aniston.png', 'stimuli/images/faces/jeb_bush.png', 'stimuli/images/faces/jay_z.png', 'stimuli/images/faces/jason_statham.png', 'stimuli/images/faces/hope_solo.png', 'stimuli/images/faces/hillary_clinton.png', 'stimuli/images/faces/gwen_stefani.png', 'stimuli/images/faces/gerard_butler.png', 'stimuli/images/faces/george_clooney.png', 'stimuli/images/faces/george_bush.png', 'stimuli/images/faces/gabby_douglas.png', 'stimuli/images/faces/emma_stone.png', 'stimuli/images/faces/drake.png', 'stimuli/images/faces/david_beckham.png', 'stimuli/images/faces/danica_patrick.png', 'stimuli/images/faces/condoleezza_rice.png', 'stimuli/images/faces/christian_bale.png', 'stimuli/images/faces/chris_pratt.png', 'stimuli/images/faces/chris_hemsworth.png', 'stimuli/images/faces/chris_christie.png', 'stimuli/images/faces/carrie_underwood.png', 'stimuli/images/faces/carly_fiorina.png', 'stimuli/images/faces/bruno_mars.png', 'stimuli/images/faces/britney_spears.png', 'stimuli/images/faces/brad_pitt.png', 'stimuli/images/faces/blake_shelton.png', 'stimuli/images/faces/blake_lively.png', 'stimuli/images/faces/bill_clinton.png', 'stimuli/images/faces/beyonce_knowles.png', 'stimuli/images/faces/bernie_sanders.png', 'stimuli/images/faces/ben_carson.png', 'stimuli/images/faces/barack_obama.png', 'stimuli/images/faces/ariana_grande.png', 'stimuli/images/faces/anne_hathaway.png', 'stimuli/images/faces/angela_merkel.png', 'stimuli/images/faces/amanda_seyfried.png', 'stimuli/images/faces/alex_rodriguez.png', 'stimuli/images/faces/alex_morgan.png', 'stimuli/images/faces/adele.png', 'stimuli/images/faces/adam_levine.png', 'stimuli/images/faces/abby_wambach.png', 'stimuli/images/faces/aaron_rodgers.png', 'stimuli/images/fruits/yellow_apple.png', 'stimuli/images/fruits/whole_pears.png', 'stimuli/images/fruits/whole_pear02.png', 'stimuli/images/fruits/whole_cantaloupe.png', 'stimuli/images/fruits/watermelon.png', 'stimuli/images/fruits/sliced_watermelon05.png', 'stimuli/images/fruits/sliced_watermelon04.png', 'stimuli/images/fruits/sliced_watermelon03.png', 'stimuli/images/fruits/sliced_watermelon02.png', 'stimuli/images/fruits/sliced_watermelon.png', 'stimuli/images/fruits/sliced_pears02.png', 'stimuli/images/fruits/sliced_pears.png', 'stimuli/images/fruits/sliced_honeydew02.png', 'stimuli/images/fruits/sliced_honeydew.png', 'stimuli/images/fruits/sliced_fuji.png', 'stimuli/images/fruits/red_grapes07.png', 'stimuli/images/fruits/red_grapes06.png', 'stimuli/images/fruits/red_grapes05.png', 'stimuli/images/fruits/red_grapes04.png', 'stimuli/images/fruits/red_grapes03.png', 'stimuli/images/fruits/red_grapes02.png', 'stimuli/images/fruits/red_grapes.png', 'stimuli/images/fruits/red_delicious.png', 'stimuli/images/fruits/pink_lady.png', 'stimuli/images/fruits/pear06.png', 'stimuli/images/fruits/pear05.png', 'stimuli/images/fruits/pear04.png', 'stimuli/images/fruits/pear03.png', 'stimuli/images/fruits/pear02.png', 'stimuli/images/fruits/pear01.png', 'stimuli/images/fruits/pear.png', 'stimuli/images/fruits/orange_pear.png', 'stimuli/images/fruits/muskmelon02.png', 'stimuli/images/fruits/muskmelon.png', 'stimuli/images/fruits/mixed_grapes05.png', 'stimuli/images/fruits/mixed_grapes04.png', 'stimuli/images/fruits/mixed_grapes03.png', 'stimuli/images/fruits/mixed_grapes02.png', 'stimuli/images/fruits/mixed_grapes.png', 'stimuli/images/fruits/leaning_pears03.png', 'stimuli/images/fruits/leaning_pears02.png', 'stimuli/images/fruits/leaning_pears.png', 'stimuli/images/fruits/lavaredo.png', 'stimuli/images/fruits/kiku_slice.png', 'stimuli/images/fruits/honeydew_melon02.png', 'stimuli/images/fruits/honeydew_melon.png', 'stimuli/images/fruits/honeydew_half.png', 'stimuli/images/fruits/honeydew.png', 'stimuli/images/fruits/honeycrisp_apple.png', 'stimuli/images/fruits/halved_watermelon02.png', 'stimuli/images/fruits/halved_watermelon.png', 'stimuli/images/fruits/half_apple.png', 'stimuli/images/fruits/green_pear.png', 'stimuli/images/fruits/green_grapes06.png', 'stimuli/images/fruits/green_grapes05.png', 'stimuli/images/fruits/green_grapes04.png', 'stimuli/images/fruits/green_grapes03.png', 'stimuli/images/fruits/green_grapes02.png', 'stimuli/images/fruits/green_grapes.png', 'stimuli/images/fruits/granny_smith_apples.png', 'stimuli/images/fruits/golden_apple.png', 'stimuli/images/fruits/gala_apple_leaf.png', 'stimuli/images/fruits/gala_apple.png', 'stimuli/images/fruits/fresh_red_apple.png', 'stimuli/images/fruits/fresh_pear03.png', 'stimuli/images/fruits/fresh_pear.png', 'stimuli/images/fruits/fresh_fuji.png', 'stimuli/images/fruits/finger_grapes.png', 'stimuli/images/fruits/cut_pears05.png', 'stimuli/images/fruits/cut_pears04.png', 'stimuli/images/fruits/cut_pears03.png', 'stimuli/images/fruits/cut_pears02.png', 'stimuli/images/fruits/cut_pears.png', 'stimuli/images/fruits/cut_cantaloupe.png', 'stimuli/images/fruits/casaba_melon.png', 'stimuli/images/fruits/canteloupe_sliced04.png', 'stimuli/images/fruits/cantaloupe_sliced03.png', 'stimuli/images/fruits/cantaloupe_sliced.png', 'stimuli/images/fruits/cantaloupe02.png', 'stimuli/images/fruits/cantaloupe.png', 'stimuli/images/fruits/bosc_pear.png', 'stimuli/images/fruits/black_grapes05.png', 'stimuli/images/fruits/black_grapes04.png', 'stimuli/images/fruits/black_grapes03.png', 'stimuli/images/fruits/black_grapes02.png', 'stimuli/images/fruits/black_grapes.png', 'stimuli/images/fruits/apple_slice2.png', 'stimuli/images/fruits/apple_green.png', 'stimuli/images/fruits/apple07.png', 'stimuli/images/fruits/apple06.png', 'stimuli/images/fruits/apple05b.png', 'stimuli/images/fruits/apple05a.png', 'stimuli/images/fruits/apple04.png', 'stimuli/images/fruits/apple03c.png', 'stimuli/images/fruits/apple03b.png', 'stimuli/images/fruits/apple03a.png', 'stimuli/images/fruits/apple01 2.png', 'stimuli/images/places/yellow_sand_kauai.png', 'stimuli/images/places/yellow_sand_beach.png', 'stimuli/images/places/white_sand_beach.png', 'stimuli/images/places/unique_mountains.png', 'stimuli/images/places/tree_beach.png', 'stimuli/images/places/tower_bridge.png', 'stimuli/images/places/texas_beach.png', 'stimuli/images/places/taj_mahal.png', 'stimuli/images/places/sydney_bridge.png', 'stimuli/images/places/swedish_bridge.png', 'stimuli/images/places/supreme_court.png', 'stimuli/images/places/sunset_beach.png', 'stimuli/images/places/stbasils.png', 'stimuli/images/places/space_needle.png', 'stimuli/images/places/skyway_bridge.png', 'stimuli/images/places/sioseh_bridge.png', 'stimuli/images/places/shell_beach.png', 'stimuli/images/places/sandy_beach.png', 'stimuli/images/places/sajama.png', 'stimuli/images/places/sagrada_familia.png', 'stimuli/images/places/royal_albert_hall.png', 'stimuli/images/places/river_bridge.png', 'stimuli/images/places/ripple_beach.png', 'stimuli/images/places/red_sand_beach.png', 'stimuli/images/places/python_bridge.png', 'stimuli/images/places/pont_du_gard.png', 'stimuli/images/places/piza.png', 'stimuli/images/places/pink_sand_beach.png', 'stimuli/images/places/pink_beach.png', 'stimuli/images/places/petronas_towers.png', 'stimuli/images/places/palm_beach.png', 'stimuli/images/places/outer_banks_beach.png', 'stimuli/images/places/natchez_bridge.png', 'stimuli/images/places/mountains1.png', 'stimuli/images/places/mountain_range.png', 'stimuli/images/places/mount_huang.png', 'stimuli/images/places/mount_hood.png', 'stimuli/images/places/mount_fuji.png', 'stimuli/images/places/mount_everest.png', 'stimuli/images/places/millau_bridge.png', 'stimuli/images/places/meijigallery_tokyo.png', 'stimuli/images/places/mediterranean_beach.png', 'stimuli/images/places/matterhorn.png', 'stimuli/images/places/long_bridge.png', 'stimuli/images/places/light_pink_beach.png', 'stimuli/images/places/licancabur.png', 'stimuli/images/places/kilimanjaro.png', 'stimuli/images/places/kailash.png', 'stimuli/images/places/k2.png', 'stimuli/images/places/japanese_castle.png', 'stimuli/images/places/jacques_bridge.png', 'stimuli/images/places/independence_hall.png', 'stimuli/images/places/himalayas.png', 'stimuli/images/places/harvard.png', 'stimuli/images/places/half_dome.png', 'stimuli/images/places/hagia_sophia.png', 'stimuli/images/places/gray_beach.png', 'stimuli/images/places/grand_teton.png', 'stimuli/images/places/golden_gate_bridge.png', 'stimuli/images/places/glass_bridge.png', 'stimuli/images/places/gherkin.png', 'stimuli/images/places/freedom_beach.png', 'stimuli/images/places/forth_bridge.png', 'stimuli/images/places/fort_knox.png', 'stimuli/images/places/flatiron_building.png', 'stimuli/images/places/fitz_roy.png', 'stimuli/images/places/empire_state_building.png', 'stimuli/images/places/eiger.png', 'stimuli/images/places/donghai_bridge.png', 'stimuli/images/places/dome_of_the_rock.png', 'stimuli/images/places/distant_mountains.png', 'stimuli/images/places/denali.png', 'stimuli/images/places/danyang_bridge.png', 'stimuli/images/places/covered_bridge.png', 'stimuli/images/places/costa_rica_mountain.png', 'stimuli/images/places/cn_tower.png', 'stimuli/images/places/cinderella_castle.png', 'stimuli/images/places/chengyang_bridge.png', 'stimuli/images/places/castle.png', 'stimuli/images/places/capitol.png', 'stimuli/images/places/capilano_bridge.png', 'stimuli/images/places/california_beach.png', 'stimuli/images/places/brooklyn_bridge.png', 'stimuli/images/places/black_sand_maui.png', 'stimuli/images/places/black_sand.png', 'stimuli/images/places/black_beach_surf.png', 'stimuli/images/places/black_beach_iceland.png', 'stimuli/images/places/beautiful_beach.png', 'stimuli/images/places/azadi_monument.png', 'stimuli/images/places/aoraki.png', 'stimuli/images/places/alpamayo.png', 'stimuli/images/places/alcantara_bridge.png', 'stimuli/images/places/alamo.png', 'stimuli/images/places/akashi_bridge.png', 'stimuli/images/places/360_bridge.png', 'stimuli/cues/suppress_cue_image.png', 'stimuli/cues/maintain_cue_image.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  expName = remlure_maintask
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Encode
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    PolygonComponent encode_fixation
      fillColor = dimgray
      lineColor = dimgray
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent img_1_left
      image [set every repeat] = $encode_1_img
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent img_2_right
      image [set every repeat] = $encode_2_img
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Manipulate
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    CodeComponent cue_position_code
      Code Type = Auto->JS
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      Begin Routine:
        if cue_position == "left":
            cuepos = (-0.3, 0)
        elif cue_position == "right":
            cuepos = (0.3, 0)

        manipulate_cue.setPos(cuepos)

        opcue_dict = {
            "maintain": "stimuli/cues/maintain.png",
            "suppress": "stimuli/cues/suppress.png",
        }
    ImageComponent manipulate_cue
      image [set every repeat] = $opcue_dict[operation]
      pos [set every repeat] = $cuepos
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent manipulate_fixation
      fillColor = dimgray
      lineColor = dimgray
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Probe
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    CodeComponent probe_code
      Code Type = Both
      Begin JS Experiment:
        var keyPressed_probe;
      Begin JS Routine:
        let correct_ans;
        if (["cued", "uncued", "replacement"].includes(probe_subtype)) {
            correct_ans = "f";
        } else {
            correct_ans = "j";
        }
        keyPressed_probe = undefined;
      Begin Routine:
        print("probesubtype = ", probe_subtype)

        if probe_subtype in ["cued", "uncued", "replacement"]:
            correct_ans = "f"
        else:
            correct_ans = "j"
      End JS Routine:
        try {
            keyPressed_probe = _probe_keyResp_allKeys[_probe_keyResp_allKeys.length - 1].name;
        } catch (e) {
        }
        console.log(keyPressed_probe)
        if ((keyPressed_probe !== undefined) && (keyPressed_probe === correct_ans)) {
            console.log("correct!");
            corr += 1;
        }
      End Routine:
        try:
            keypressed = _probe_keyResp_allKeys[-1].name
        except IndexError:
            print("index error for keypressed. No key was pressed!")
            keypressed = None
        if keypressed == correct_ans:
            print("correct!")
            corr += 1
    ImageComponent probe_image
      image [set every repeat] = $probe_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent probe_keyResp
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent yesKey_text
      letterHeight = 0.05
      pos = (-0.2, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        [F]
        YES
    TextComponent noKey_text
      letterHeight = 0.05
      pos = (0.2, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        [J]
        NO
  Routine Delay_4000
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    PolygonComponent delay_fixation_4000
      fillColor = dimgray
      lineColor = dimgray
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine Delay_2000
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    PolygonComponent delay_fixation_2000
      fillColor = dimgray
      lineColor = dimgray
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Welcome
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    CodeComponent init_code
      Code Type = Both
      Before Experiment:
        #### LOAD NECESSARY PACKAGES ####
        import random
        import pandas as pd
        import numpy as np
        import os
        from collections import Counter
        import copy
        from itertools import permutations

        # Set participant number
        # Need this to create a folder with each subject's design matrix
        participant_number = "test"  # In PsychoPy: expInfo['participant']

        # Set directory path robustly
        try:
            _thisDir = os.path.dirname(os.path.abspath(__file__))
        except NameError:
            print("__file__ does not exist in this environment; using current working directory")
            _thisDir = os.getcwd()

        _thisDir

        # Create a subject-specific folder to save all lists
        list_foldername = os.path.join(_thisDir, "subject lists", f"sub-{participant_number}")
        phase_subFolder = "main_task"

        # Create the subject folder if it doesn't exist
        if not os.path.exists(list_foldername):
            os.makedirs(list_foldername, exist_ok=True)
            print(f"List folder successfully created for sub-{participant_number}")
        else:
            print(f"List folder already exists for sub-{participant_number}...")

        # Create the phase subfolder within the subject's folder
        phase_folder_path = os.path.join(list_foldername, phase_subFolder)
        if not os.path.exists(phase_folder_path):
            os.makedirs(phase_folder_path, exist_ok=True)
            print(f"Created phase folder: {phase_subFolder}")
        else:
            print(f"Phase folder '{phase_subFolder}' already exists...")

        #### SETUP STIMULUS MASTER LISTS ####
        # Initialize RNG (no fixed seed -> different randomization each run)
        random.seed()

        # Build absolute paths to stimulus CSVs
        faces_mainTask_list_infile = os.path.join(_thisDir, "stimuli", "csvs", "main_task", "faces_mainTask.csv")
        places_mainTask_list_infile = os.path.join(_thisDir, "stimuli", "csvs", "main_task", "places_mainTask.csv")
        fruits_mainTask_list_infile = os.path.join(_thisDir, "stimuli", "csvs", "main_task", "fruits_mainTask.csv")

        faces_novel_list_infile  = os.path.join(_thisDir, "stimuli", "csvs", "main_task", "faces_novel.csv")
        places_novel_list_infile = os.path.join(_thisDir, "stimuli", "csvs", "main_task", "places_novel.csv")
        fruits_novel_list_infile = os.path.join(_thisDir, "stimuli", "csvs", "main_task", "fruits_novel.csv")

        # Load first column of each CSV as a list
        # NOTE: These files must exist in your project structure.
        faces_mainTask_list  = pd.read_csv(faces_mainTask_list_infile,  header=None).loc[:,0].tolist()
        places_mainTask_list = pd.read_csv(places_mainTask_list_infile, header=None).loc[:,0].tolist()
        fruits_mainTask_list = pd.read_csv(fruits_mainTask_list_infile, header=None).loc[:,0].tolist()

        faces_novel_list  = pd.read_csv(faces_novel_list_infile,  header=None).loc[:,0].tolist()         # novel pool
        places_novel_list = pd.read_csv(places_novel_list_infile, header=None).loc[:,0].tolist()         # novel pool
        fruits_novel_list = pd.read_csv(fruits_novel_list_infile, header=None).loc[:,0].tolist()         # novel pool

        # Quick peek at counts (will error if files are missing)
        len(faces_mainTask_list), len(places_mainTask_list), len(fruits_mainTask_list), len(faces_novel_list), len(places_novel_list), len(fruits_novel_list)

        #### CREATE MAIN TASK LISTS ####
        # Define some experiment variables
        total_trials = 192    # CHANGED (was 144)
        run_len = 48          # CHANGED (was 24)
        num_runs = 4          # CHANGED (was 6)
        num_oper_per_run = run_len // 2    # 2 operations -> 48 // 2 = 24 per operation per run

        ## Create conditions structure
        # Factor levels
        cue_pos    = ["left", "right"]
        operations = ["maintain", "suppress"]
        categories = ["faces", "places", "fruits"]
        probe_types = range(4)  # "cued", "ucued", "novel_samecatcued", "novel_samecatuncued"

        # Create the conditions list
        conditions = [(cat1, cat2, oper, probe)
                       for cat1, cat2 in permutations(categories, 2)
                      for oper in operations
                      for probe in probe_types]
        conditions = np.array(conditions)
        print(conditions)
        print(len(conditions))
        # Initialize the column order
        column_order = ["encode_1_cat", "encode_2_cat", "operation", "probe_type"]

        # --- BUILD 192 TRIALS FROM THE 48 UNIQUE CONDITIONS (OPTION A) ---

        # combined_conds should be shape (2, 24, 4) for 2 ops × 24 conds each = 48 conditions total
        base_df = pd.DataFrame(
            conditions,
            columns=column_order
        )
        print(base_df)

        conditions_df = pd.concat([base_df] * 2, ignore_index=True)
        conditions_df["cue_position"] = "left"
        conditions_df.loc[48:, "cue_position"] = "right"
        conditions_df = pd.concat([conditions_df] * 2, ignore_index=True)
        print(conditions_df)
        print(conditions_df["cue_position"].sum())
        # add helper column
        conditions_df["helper"] = 1
        np.unique(conditions_df.groupby(["encode_1_cat", "encode_2_cat", "operation", "probe_type", "cue_position"]).count()["helper"])

        ##  Enforce an "operation streak" rule within each run: no operation (maintain/suppress) is allowed to appear 4+ times in a row (max consecutive streak length = 3)
        def max_streak(series):
            grp = (series != series.shift()).cumsum()
            return series.groupby(grp).size().max()

        # Shuffle all trials once before splitting into runs (randomizes which trials land in each run).
        conditions_df = conditions_df.sample(frac=1).reset_index(drop=True)

        runs = []
        for i in range(num_runs):
            # Take the next chunk of run_len trials to form one run (e.g., 48 trials).
            run_df = conditions_df.iloc[i*run_len:(i+1)*run_len].copy()

             # Keep reshuffling the order WITHIN this run until the operation streak rule is satisfied.
            while True:
                run_df = run_df.sample(frac=1).reset_index(drop=True)
                if max_streak(run_df["operation"]) <= 3:
                    break
         # Label the accepted run number (1..num_runs) and store it.
            run_df["run_num"] = i + 1
            runs.append(run_df)

        # Stitch all runs back together into the final main task dataframe (192 rows total).
        mainTask_df = pd.concat(runs, ignore_index=True)

        print(mainTask_df["run_num"].value_counts().sort_index())

        # Set trial number within each run (1..48)
        mainTask_df["trial_num"] = mainTask_df.groupby("run_num").cumcount() + 1

        # Quick check: each run should have 1..48 exactly once
        print(mainTask_df.groupby("run_num")["trial_num"].agg(["min", "max", "nunique"]))

        # rest_trigger = 1 on last trial of each run
        mainTask_df["rest_trigger"] = (mainTask_df["trial_num"] == run_len).astype(int)

        # force the very last row of the whole task to 0
        mainTask_df.loc[mainTask_df.index[-1], "rest_trigger"] = 0

        print(mainTask_df.loc[mainTask_df["rest_trigger"] == 1, ["run_num","trial_num"]])
        print(mainTask_df.tail(3)[["run_num","trial_num","rest_trigger"]])  # last row should be 0

        # SET JITTER TO CONSTANT
        mainTask_df["jitter"] = 4

        mainTask_df["jitter"].value_counts()
        # =========================
        # REBUILD RUNS UNTIL IMAGE POOLS WON'T EMPTY
        # =========================

        main_pool_sizes = {
            "faces": len(faces_mainTask_list),
            "places": len(places_mainTask_list),
            "fruits": len(fruits_mainTask_list),
        }

        def run_encode_demand(run_df):
            # Total encode slots per category in a run = counts in encode_1_cat + encode_2_cat
            return run_df["encode_1_cat"].value_counts().add(
                run_df["encode_2_cat"].value_counts(), fill_value=0
            ).astype(int)

        def runs_feasible_for_no_dupes(mainTask_df):
            # Each run must not demand more of any category than the pool contains
            for r in range(1, num_runs + 1):
                rd = mainTask_df.loc[mainTask_df["run_num"] == r]
                demand = run_encode_demand(rd)
                for cat, needed in demand.items():
                    if needed > main_pool_sizes[cat]:
                        return False, (r, cat, needed, main_pool_sizes[cat])
            return True, None

        max_attempts = 2000
        attempt = 0

        feasible, info = runs_feasible_for_no_dupes(mainTask_df)

        while not feasible:
            attempt += 1
            if attempt > max_attempts:
                r, cat, needed, have = info
                raise ValueError(
                    f"Could not build feasible runs after {max_attempts} attempts. "
                    f"Example fail: run {r} needs {needed} '{cat}' encode images but pool has {have}."
                )

            # Rebuild mainTask_df by reshuffling conditions_df and rebuilding runs with your same op rule
            conditions_tmp = conditions_df.sample(frac=1).reset_index(drop=True)

            runs = []
            for i in range(num_runs):
                run_df = conditions_tmp.iloc[i*run_len:(i+1)*run_len].copy()

                # keep your operation streak rule
                for _ in range(5000):
                    run_df = run_df.sample(frac=1).reset_index(drop=True)
                    if max_streak(run_df["operation"]) <= 3:
                        break
                else:
                    runs = None
                    break

                run_df["run_num"] = i + 1
                runs.append(run_df)

            if runs is None:
                continue

            mainTask_df = pd.concat(runs, ignore_index=True)

            # Recompute trial_num/rest_trigger/jitter since we rebuilt mainTask_df
            mainTask_df["trial_num"] = mainTask_df.groupby("run_num").cumcount() + 1
            mainTask_df["rest_trigger"] = (mainTask_df["trial_num"] == run_len).astype(int)
            mainTask_df.loc[mainTask_df.index[-1], "rest_trigger"] = 0
            mainTask_df["jitter"] = 4

            feasible, info = runs_feasible_for_no_dupes(mainTask_df)

        print(f"Runs are feasible for no-duplicate encoding images (attempts used: {attempt}).")
        # =========================
        # ASSIGN IMAGES RUN-BY-RUN
        # =========================

        # Probe type mapping (for readability; still keeps your numeric probe_type)
        # 0 = cued
        # 1 = uncued
        # 2 = novel_samecat
        # 3 = novel_diff_cat

        # Build category -> pool dicts (main pools for encoding; novel pools for novel probes)
        main_pools_master = {
            "faces": faces_mainTask_list,
            "places": places_mainTask_list,
            "fruits": fruits_mainTask_list
        }
        novel_pools_master = {
            "faces": faces_novel_list,
            "places": places_novel_list,
            "fruits": fruits_novel_list
        }

        # Safety: cue_position must be "left"/"right"
        if not set(mainTask_df["cue_position"].unique()).issubset({"left", "right"}):
            raise ValueError("cue_position must contain only 'left'/'right'.")

        def _draw_from_pool(pool_list, cat, run_num, label):
            if len(pool_list) == 0:
                raise ValueError(f"Run {run_num}: pool empty when drawing {label} for category '{cat}'.")
            return pool_list.pop()  # pop ensures no reuse within run

        def _opposite_category(cat, other_cat):
            # Helper if you need it; not used directly
            return other_cat

        # Initialize columns
        mainTask_df["encode_1_img"] = None
        mainTask_df["encode_2_img"] = None
        mainTask_df["probe_img"]    = None
        mainTask_df["probe_cat"]    = None  # optional but useful (category of the probe image)

        # Build by run
        for run_num in range(1, num_runs + 1):

            run_idx = mainTask_df.index[mainTask_df["run_num"] == run_num].tolist()
            run_df = mainTask_df.loc[run_idx].copy()

            # Refresh pools for this run (new shuffled "decks" each run)
            main_decks = {cat: random.sample(main_pools_master[cat], k=len(main_pools_master[cat])) for cat in main_pools_master}
            novel_decks = {cat: random.sample(novel_pools_master[cat], k=len(novel_pools_master[cat])) for cat in novel_pools_master}

            # Assign encode images (no duplicates within run because we pop from decks)
            e1_imgs = []
            e2_imgs = []
            for _, row in run_df.iterrows():
                c1 = row["encode_1_cat"]
                c2 = row["encode_2_cat"]
                e1_imgs.append(_draw_from_pool(main_decks[c1], c1, run_num, "encode_1_img"))
                e2_imgs.append(_draw_from_pool(main_decks[c2], c2, run_num, "encode_2_img"))

            run_df["encode_1_img"] = e1_imgs
            run_df["encode_2_img"] = e2_imgs

            # Assign probe images
            probe_imgs = []
            probe_cats = []

            for _, row in run_df.iterrows():
                pt = int(row["probe_type"])
                cue_pos = row["cue_position"]

                # Determine which encode item is "cued" vs "uncued"
                if cue_pos == "left":
                    cued_cat, cued_img = row["encode_1_cat"], row["encode_1_img"]
                    uncued_cat, uncued_img = row["encode_2_cat"], row["encode_2_img"]
                else:  # cue_pos == "right"
                    cued_cat, cued_img = row["encode_2_cat"], row["encode_2_img"]
                    uncued_cat, uncued_img = row["encode_1_cat"], row["encode_1_img"]

                if pt == 0:
                    # cued probe = repeat the cued image
                    probe_imgs.append(cued_img)
                    probe_cats.append(cued_cat)

                elif pt == 1:
                    # uncued probe = repeat the uncued image
                    probe_imgs.append(uncued_img)
                    probe_cats.append(uncued_cat)

                elif pt == 2:
                    # novel_samecat = new image from NOVEL pool, same category as cued
                    probe_imgs.append(_draw_from_pool(novel_decks[cued_cat], cued_cat, run_num, "probe_img (novel_samecat)"))
                    probe_cats.append(cued_cat)

                elif pt == 3:
                    # CHANGED: novel_diff_cat now means NOVEL image from the UNCUED category
                    probe_imgs.append(
                        _draw_from_pool(novel_decks[uncued_cat], uncued_cat, run_num, "probe_img (novel_uncued_cat)")
                    )
                    probe_cats.append(uncued_cat)

                else:
                    raise ValueError(f"Unknown probe_type {pt} in run {run_num}.")

            run_df["probe_img"] = probe_imgs
            run_df["probe_cat"] = probe_cats

            # Write back into mainTask_df
            mainTask_df.loc[run_idx, ["encode_1_img", "encode_2_img", "probe_img", "probe_cat"]] = run_df[
                ["encode_1_img", "encode_2_img", "probe_img", "probe_cat"]
            ].values

            # Per-run duplicate check (across encode positions only, as requested)
            used_encode = pd.concat([run_df["encode_1_img"], run_df["encode_2_img"]], ignore_index=True)
            if used_encode.duplicated().any():
                raise ValueError(f"Duplicate encode image detected within run {run_num}.")

        print("Assigned encode/probe images run-by-run with no duplicated ENCODE images within each run.")

        # Save the final mainTask_df to the subject's main_task folder
        mainTask_df_outfile = os.path.join(phase_folder_path, "main_stim_list.csv")
        mainTask_df.to_csv(mainTask_df_outfile, index=False)

        stim_list = mainTask_df_outfile
        print("Saved stim list to:", stim_list)
      Before JS Experiment:
        var set_num, stim_list;

        set_num = Math.floor(Math.random() * 10).toString();

        stim_list = 'stimuli/csvs/maintask_stimlists/main_stim_list_' + set_num + '.csv';
      Begin JS Routine:
        psychoJS.experiment.addData("stim_set", set_num);
    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to an experiment by the ... Lab!

        This experiment is meant to be run in full-screen mode. DO NOT escape out of the full-screen. Otherwise you will have to restart the entire experiment from the beginning.


        Press <SPACE> to continue
    KeyboardComponent welcome_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Manipulate_Instruct
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  Routine ITI
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    PolygonComponent ITI_fixation
      disabled = True
      fillColor = dimgray
      lineColor = dimgray
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = jitter
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    TextComponent ITI_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = jitter
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  Routine Rest
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    TextComponent rest_exclaim_text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = Rest!
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    TextComponent rest_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text [set every frame] = $f"Great job completing the run! You have completed {run_num} out of 4 runs. You may now take a {30 - t:.0f} second break!"
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    KeyboardComponent rest_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20
      stopVal [time (s)] = 30
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    TextComponent rest_continue_text
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 20
      stopVal [time (s)] = 30
      text = Press <SPACE> if you would like to end the break early!
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  Routine Trial_prepare
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    TextComponent Trial_prepare_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $f"The trial will begin in {5 - t:.0f} s."
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  Routine Encode_instruct
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    ImageComponent encode_instruct_img
      image = new instructions/EncodeInstructionsnew.png
      size = (1.53, 1)
      startVal [time (s)] = 0.0
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    TextComponent encode_instruct_cont_text
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <SPACE> to continue.
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    KeyboardComponent encode_instruct_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Oper_screen_instruct
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    ImageComponent operscreen_instruct_img
      image = instructions/oper_screen_instructions.png
      size = (1.53, 1)
      startVal [time (s)] = 0.0
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    TextComponent operscreen_instruct_cont_text
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press <SPACE> to continue.
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    KeyboardComponent operscreen_instruct_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Operations_instruct
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    ImageComponent operations_instruct_img
      image = new instructions/OperationInstructionsnew.png
      size = (1.53, 1)
      startVal [time (s)] = 0.0
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    TextComponent operations_instruct_conttext
      letterHeight = 0.04
      pos = (0, -0.43)
      startVal [time (s)] = 0.0
      text = Press <SPACE> to continue.
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    KeyboardComponent operations_instruct_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Probe_screen_instruct
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    ImageComponent probescreen_instruct_img
      image = new instructions/ProbeScreenInstructionsnew.png
      size = (1.53, 1)
      startVal [time (s)] = 0.0
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    TextComponent probescreen_instruct_conttext
      letterHeight = 0.04
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Press <SPACE> to continue.
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    KeyboardComponent probescreen_instruct_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Probe_instruct
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    ImageComponent probe_instructions_img
      image = new instructions/ProbeInstructionsNew.png
      size = (1.53, 1)
      startVal [time (s)] = 0.0
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    TextComponent probe_instructions_conttext
      letterHeight = 0.04
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Press <SPACE> to continue.
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    KeyboardComponent probe_instructions_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Main_exp_begin
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    TextComponent mainexp_begin_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The main experiment is about to begin.



        Press <ENTER> to continue.
    KeyboardComponent main_exp_begin
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Debrief
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    TextComponent debrief_text
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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      text:
        In the experiment, you were asked to encode two items on each trial. You were then cued to manipulate one of the items in your working memory by either maintaining it, suppressing it, or replacing it. We then probed your memory of one item's position. The aim of this study is to test if semantic activation reduces your ability to suppress the individual items in that list. The results of this study will improve our understanding of when people are good at controlling their thoughts and when they are not, which in its extreme could result in symptoms of psychological disorders such as rumination and thought intrusions.

        Your participation is greatly appreciated! If you have any questions, please feel free to email me at {edjoeleung@utexas.edu}. THANK YOU!!
  Routine Practice_begin
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    TextComponent prac_begin_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let's do a couple of practice trials!



        Press <RETURN> to continue.
    KeyboardComponent prac_begin_keyResp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent corrinit_code
      Code Type = Auto->JS
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      Begin Experiment:
        corr = 0
      Begin Routine:
        corr = 0
  Routine Practice_end
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    TextComponent practice_continue_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"That is the end of the practice! Your accuracy was " + str(corr) + "/6.\n\nPress <SPACE> to continue!"
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    KeyboardComponent pracend_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Encode_instruct
  Routine Oper_screen_instruct
  Routine Operations_instruct
  Routine Probe_screen_instruct
  Routine Probe_instruct
  Routine Practice_begin
  Routine Trial_prepare
  LoopInitiator prac_trials loopType="TrialHandler"
    conditionsFile = stimuli/csvs/maintask_stimlists/prac_stim_lists.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('encode_1_cat', 'fruits'), ('encode_2_cat', 'faces'), ('operation', 'suppress'), ('probe_type', np.int64(2)), ('cue_position', 'left'), ('run_num', np.int64(1)), ('probe_subtype', 'novel_samecatuncued'), ('trial_num', np.int64(1)), ('jitter', np.int64(5)), ('rest_trigger', np.int64(0)), ('encode_1_img', 'stimuli/images/fruits/cut_cantaloupe.png'), ('encode_2_img', 'stimuli/images/faces/blake_shelton.png'), ('probe_img', 'stimuli/images/faces/seth_rogan.png')]),
      OrderedDict([('encode_1_cat', 'places'), ('encode_2_cat', 'fruits'), ('operation', 'maintain'), ('probe_type', np.int64(3)), ('cue_position', 'left'), ('run_num', np.int64(1)), ('probe_subtype', 'novel_samecatcued'), ('trial_num', np.int64(2)), ('jitter', np.int64(5)), ('rest_trigger', np.int64(0)), ('encode_1_img', 'stimuli/images/places/mount_fuji.png'), ('encode_2_img', 'stimuli/images/fruits/halved_watermelon02.png'), ('probe_img', 'stimuli/images/fruits/sliced_pears.png')]),
      OrderedDict([('encode_1_cat', 'faces'), ('encode_2_cat', 'fruits'), ('operation', 'suppress'), ('probe_type', np.int64(0)), ('cue_position', 'left'), ('run_num', np.int64(1)), ('probe_subtype', 'cued'), ('trial_num', np.int64(3)), ('jitter', np.int64(4)), ('rest_trigger', np.int64(0)), ('encode_1_img', 'stimuli/images/faces/brad_pitt.png'), ('encode_2_img', 'stimuli/images/fruits/green_grapes.png'), ('probe_img', 'stimuli/images/faces/brad_pitt.png')]),
      OrderedDict([('encode_1_cat', 'places'), ('encode_2_cat', 'fruits'), ('operation', 'suppress'), ('probe_type', np.int64(0)), ('cue_position', 'right'), ('run_num', np.int64(1)), ('probe_subtype', 'cued'), ('trial_num', np.int64(4)), ('jitter', np.int64(5)), ('rest_trigger', np.int64(0)), ('encode_1_img', 'stimuli/images/places/flatiron_building.png'), ('encode_2_img', 'stimuli/images/fruits/fresh_fuji.png'), ('probe_img', 'stimuli/images/fruits/fresh_fuji.png')])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
    Routine Encode
    Routine Delay_2000
    Routine Manipulate
    Routine Delay_4000
    Routine Probe
    Routine ITI
  LoopTerminator prac_trials
  Routine Practice_end
  Routine Main_exp_begin
  Routine Trial_prepare
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = subject lists/sub-test/main_task/main_stim_list.csv
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine Encode
    Routine Delay_2000
    Routine Manipulate
    Routine Delay_4000
    Routine Probe
    Routine ITI
    LoopInitiator rest_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = rest_trigger
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      Routine Rest
      Routine Trial_prepare
    LoopTerminator rest_loop
  LoopTerminator trials
  Routine Debrief
